PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [600, 400]
  expName = bouncing_ball
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = red
      lineColor = pink
      nVertices = 100
      pos [set every frame] = (0, (sin(t*6)**2)/20)
      shape = regular polygon...
      size = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = height
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Flow
  Routine trial
