PsychoPy2experiment version="3.0.0b4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1800, 1200]
  Full-screen window = False
  exportHTML = manually
  expName = corsi
  Screen = 1
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Routines
  Routine trial
    PolygonComponent blk1
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      units = height
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    PolygonComponent blk2
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      units = height
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    PolygonComponent blk3
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      units = height
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    PolygonComponent blk4
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      units = height
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    PolygonComponent blk5
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      units = height
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      clickable = blk1, blk2, blk3, blk4, blk5
      startVal [condition] = doingResponse
      saveParamsClickable = name
      saveMouseState = on click
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    CodeComponent updateBlocks
      Code Type = Both
      Begin Routine:
        # initial state
        blkIndex = 0
        nextSwitch = blockDuration
        doingResponse = False
        currBlock = None

        # store blocks as a dictionary (to switch between name/object)
        blocks = {}
        blocks['blk1']=blk1
        blocks['blk2']=blk2
        blocks['blk3']=blk3
        blocks['blk4']=blk4
        blocks['blk5']=blk5

        # give blocks a new set of random locations
        for label, block in blocks.items():
            block.pos = random(2)*0.8-0.4
            block.color = 'white'
      Each Frame:
        if not doingResponse and t > nextSwitch:
            if currBlock is not None:
                #reset color of current block
                currBlock.color = 'white'

            # then change current block and make that red
            if blkIndex >= len(blocks):
                doingResponse = True  # no more blocks to show
            else:
                currBlockName = sequence[blkIndex]
                currBlock = blocks[currBlockName]
                currBlock.color = 'red'

                # track time of this change
                nextSwitch += blockDuration
            blkIndex += 1

        # all clicked?
        if len(mouse.clicked_name) >= len(sequence):
            continueRoutine = False

        # update color of clicked
        for blockName in mouse.clicked_name:
            blocks[blockName].color = 'darkgrey'
  Routine ISI
    PolygonComponent blank
      shape = cross
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      units = height
      stopVal [duration (s)] = 0.5
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  Routine thanks
    TextComponent thanksText
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great! Thanks for your help!

        All done!
  Routine instructions
    TextComponent instrText
      wrapWidth = 1.5
      units = height
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        On each trial, watch the sequence of squares flashing red. When the sequence finishes try to click the same sequence.

        When you've made the same number of clicks as the original sequence the next trial will start.

        To make it easier squares will change color after you click them

        Press any key to get started
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
    conditions = [OrderedDict([(u'sequence', ['blk1', 'blk2', 'blk3', 'blk4', 'blk5'])])]
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    Routine ISI
    Routine trial
  LoopTerminator trials
  Routine thanks
