PsychoPy2experiment version="3.0.0b6"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = flashDrag
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Routines
  Routine trial
    GratingComponent rotatingDisk
      mask = circle
      ori [set every frame] = sin(t*5)*50
      sf = None
      size = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = $random([64,64])*2-1
      units = height
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    PolygonComponent topTarget
      fillColor = red
      lineColor = red
      nVertices = 50
      opacity [set every frame] = abs(sin(t*5))>0.99
      pos = (0, 0.3)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      units = height
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    PolygonComponent bottomTarget
      fillColor = red
      lineColor = red
      nVertices = 50
      opacity [set every frame] = abs(sin(t*5))>0.99
      pos = (0, -0.3)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      units = height
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    PolygonComponent fixation
      fillColor = red
      nVertices = 50
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = height
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Flow
  Routine trial
