PsychoPy2experiment version="3.0.0b7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = redPIll_bluePill
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Routines
  Routine trial
    PolygonComponent redPill
      fillColor = red
      lineColor = red
      nVertices = 50
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bluePill
      fillColor = blue
      lineColor = blue
      nVertices = 50
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = redPill, bluePill
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name, fillColor
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent feedbackText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"You selected the %s pill" %mouse.clicked_fillColor[0]
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Choose your pill (with the mouse)
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine feedback
  LoopTerminator trials
