PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = white
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = demoTextReveal
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent sentence
      wrapWidth = 2
      color = black
      text = A long line of text to appear very gradually
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent mask
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 5
      pos [set every frame] = [t/2.5, 0]
      units = norm
      startVal [time (s)] = 0.0
      size = [2,0.2]
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Flow
  Routine trial
