PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = blockedExp
  Units = use prefs
  Screen = 1
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Routines
  Routine readyForBlock
  Routine trial
    TextComponent stimulus
      text [set every repeat] = $word
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blockName
      text [set every repeat] = $blockFile
      stopVal [duration (s)] = 1.0
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator langBlock loopType="TrialHandler"
    conditionsFile = blockFiles.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'blockFile': u'engWords.xlsx'},
      {u'blockFile': u'frenchWords.xlsx'}]
    Routine readyForBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $blockFile
      loopType = random
      nReps = 2
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      Routine trial
    LoopTerminator trials
  LoopTerminator langBlock
