PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = counterbalance-exercise
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Routines
  Routine instructions
    TextComponent instrTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a simple reaction time task.

        Press space as soon as you see an image.

        Press space to start
    KeyboardComponent key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo
    TextComponent Instructions
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        This is a demo to pracitce counterbalancing.

        Imagine our researcher wants to present one block of cat images and one block of dog images.

        They have made a classic error in counterbalancing...

        Look at the structure of the flow, the way the routines are set is not very flexible.

        Have a run through and then work through the exercises.

        Press space to start
    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dogs
    ImageComponent image_2
      image [set every repeat] = $thisImg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cats
    ImageComponent image
      image [set every repeat] = $thisImg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockMsg
    TextComponent breakTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will see some dog images.

        Press space to start
    KeyboardComponent key_resp_5
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent endTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The end! 
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Flow
  Routine demo
  Routine instructions
  LoopInitiator catTrials loopType="TrialHandler"
    conditionsFile = catConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('thisImg', 'images/cats/cat1.jpg')]),
      OrderedDict([('thisImg', 'images/cats/cat2.jpg')]),
      OrderedDict([('thisImg', 'images/cats/cat3.jpg')])]
    Routine cats
  LoopTerminator catTrials
  Routine blockMsg
  LoopInitiator dogTrials loopType="TrialHandler"
    conditionsFile = dogConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('thisImg', 'images/dogs/dog1.jpg')]),
      OrderedDict([('thisImg', 'images/dogs/dog2.jpg')]),
      OrderedDict([('thisImg', 'images/dogs/dog3.jpg')])]
    Routine dogs
  LoopTerminator dogTrials
  Routine thanks
