PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = counterbaance-exercise2
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Routines
  Routine catImages
    ImageComponent image
      image [set every repeat] = $thisImg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catWords
    TextComponent word
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisWord
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    KeyboardComponent key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catWords_2
  Routine instruct
    TextComponent instrTxt
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        This is a simple reaction time task.

        Press space as fast as you can either when you see the image or see the word.

        Press space to start
    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockMsg
    TextComponent blockTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ready for the next block?

        Press space to start
    KeyboardComponent key_resp_5
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent endTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The end!
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  Routine demo
    TextComponent demoTxt
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        This is a demo to practice counterbalancing routines with  different components.

        One of our routines presents cat images, the other cat words.

        Try out the task then work through the exercises.

        Press space to start
    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine demo
  Routine instruct
  LoopInitiator imTrials loopType="TrialHandler"
    conditionsFile = ImageConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('thisImg', 'images/cats/cat1.jpg')]),
      OrderedDict([('thisImg', 'images/cats/cat2.jpg')]),
      OrderedDict([('thisImg', 'images/cats/cat3.jpg')])]
    Routine catImages
  LoopTerminator imTrials
  Routine blockMsg
  LoopInitiator wordTrials loopType="TrialHandler"
    conditionsFile = WordConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('thisWord', 'cat')]),
      OrderedDict([('thisWord', 'meow')]),
      OrderedDict([('thisWord', 'fluff')])]
    Routine catWords
  LoopTerminator wordTrials
  Routine end
