PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = customRDK
  Screen = 1
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Routines
  Routine trial
    CodeComponent importDots
      Begin Experiment:
        import new_RDK

        visual.DotStim = new_RDK.NewRDK
    CodeComponent setCorrAns
      Begin Routine:
        if random() > 0.5:
            corrAns = 'up'
            direction = 90
        else:
            corrAns = 'down'
            direction = -90

        thisExp.addData('corrAns', corrAns)
        thisExp.addData('direction', direction)
    DotsComponent dots
      startVal [time (s)] = 0.5
      fieldPos = (0.0, 0.0)
      speed = 2
      noiseDots = direction
      dotLife = 10
      units = pix
      refreshDots = repeat
      fieldShape = circle
      coherence [set every repeat] = level
      nDots = 500
      stopVal [duration (s)] = 1.0
      fieldSize = (400,400)
      signalDots = same
      dotSize = 2
      dir [set every repeat] = direction
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'up','down'
      startVal [time (s)] = 0.5
      store = first key
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      units = pix
      startVal [time (s)] = 0.0
      size = (10,10)
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Flow
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 50
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.4, 0.2, 0.2, 0.1]
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    Routine trial
  LoopTerminator trials
