PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = custom-randomisation
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Routines
  Routine showWords
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $newTrials[trials.thisN]['Word']
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  Routine loading
    CodeComponent loadCode
      Code Type = Auto->JS
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      Begin Routine:
        oldTrials = myLoop.trialList

        randomTrials = []
        for myTrial in oldTrials:
                if not myTrial['Fixed']:
                    randomTrials.append(myTrial)

        newTrials = []

        for myTrial in oldTrials:
                if myTrial['Fixed']:
                    # Use this trial
                    newTrials.append(myTrial)
                else:
                    # resample without replacement
                    shuffle(randomTrials)
                    newTrials.append(randomTrials[-1])
                    randomTrials.pop()
        print(newTrials)
Flow
  LoopInitiator myLoop loopType="TrialHandler"
    conditionsFile = word-list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'cat', 'fixedPosition': 0},
      {'word': 'dog', 'fixedPosition': 0},
      {'word': 'fish', 'fixedPosition': 1},
      {'word': 'tree', 'fixedPosition': 0},
      {'word': 'house', 'fixedPosition': 0},
      {'word': 'grass', 'fixedPosition': 1},
      {'word': 'food', 'fixedPosition': 0},
      {'word': 'drink', 'fixedPosition': 0},
      {'word': 'chair', 'fixedPosition': 1},
      {'word': 'table', 'fixedPosition': 0}]
    Routine loading
  LoopTerminator myLoop
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = len(newTrials)
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    Routine showWords
  LoopTerminator trials
