PsychoPy2experiment version="3.2.4"
Settings
  Completed URL = completedURL
  Completion URL = https://www.pavlovia.org
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = dynamic_selective_inspect
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Routines
  Routine trial
    ImageComponent imageStimulus
      image [set every repeat] = $imageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent imageAperture
      image = images/plainWhite.png
      mask = images/circleMask.png
      pos [set every frame] = mouse.getPos()
      size = (4, 4)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine instruct
    TextComponent instructFirst
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        On each trial you have to search the screen to find the ball
        (by moving the mouse around)

        Click the mouse to get started
    MouseComponent finishInstruct
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = Mouse onset
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  Routine showMeHow
    ImageComponent imageStimulus_2
      image [set every repeat] = $imageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent imageAperture_2
      image = images/plainWhite.png
      mask = images/circleMask.png
      pos [set every frame] = mouse.getPos()
      size = (1,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = Mouse onset
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  Routine explanation
    TextComponent instruct2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        This is essentially the same thing but
        the mask is now smaller ( w,h = 2,2 in height units) so you can see
        what was happening.
    MouseComponent explanationFinish
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = Mouse onset
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  Routine thanks
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        That's all there is to it.

        Bye!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'images/7751347612_d058a3e8b3_k.jpg')]),
      OrderedDict([('imageFile', 'images/7751357630_520971b5f6_k.jpg')]),
      OrderedDict([('imageFile', 'images/7751351978_d87ea5d14e_k.jpg')])]
    Routine trial
  LoopTerminator trials
  Routine explanation
  LoopInitiator showMeTrials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'images/7751347612_d058a3e8b3_k.jpg')]),
      OrderedDict([('imageFile', 'images/7751357630_520971b5f6_k.jpg')]),
      OrderedDict([('imageFile', 'images/7751351978_d87ea5d14e_k.jpg')])]
    Routine showMeHow
  LoopTerminator showMeTrials
  Routine thanks
