PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = piano
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.visual.rect import Rect
      Begin Experiment:
        class PianoKey(Rect):
            """A tall white Rect which plays a sound when pressed, like a piano key."""
            def __init__(self, win, note="C", xPos=0):
                """Function to create a Key object"""
                # Call __init__ function for parent class
                Rect.__init__(self, # First input should always be "self", this means that the thing which is __init__ialised is this object
                              win=win, # Use window specified
                              pos=(xPos, 0.1), # This object is slightly above midpoint, at the x value specified
                              size=(0.09, 1), # This object is as tall as the screen and 9% as wide as the screen is tall
                              fillColor="white", # This object is white
                              autoDraw=True # This object should be drawn each frame
                              )
                # Store specified note as a parameter
                self.note = note
                # Create a Sound object with specified note with plenty of time to run on
                self.sound = sound.Sound(value=self.note, secs=100)

            def press(self, finger):
                """Function which runs when Key is pressed"""
                # Play previously stored Sound object
                self.sound.play()
                # Wait until the finger (mouse) is no longer pressing this object
                while finger.isPressedIn(self):
                    pass
                # When finger is released, stop playing sound and reset its time to 0
                self.sound.stop(reset=True)
      Begin Routine:
        # Create a PianoKey object for each note in an octave
        keys = {
            'C': PianoKey(win, note="C", xPos=-0.3),
            'D': PianoKey(win, note="D", xPos=-0.2),
            'E': PianoKey(win, note="E", xPos=-0.1),
            'F': PianoKey(win, note="F", xPos= 0.0),
            'G': PianoKey(win, note="G", xPos= 0.1),
            'A': PianoKey(win, note="A", xPos= 0.2),
            'B': PianoKey(win, note="B", xPos= 0.3),
        }
      Each Frame:
        # For each PianoKey object...
        for i, key in keys.items():
            # Check whether the finger (mouse) is pressed on it
            if finger.isPressedIn(key):
                # If it is, then call the object's "press" method
                key.press(finger)
    MouseComponent finger
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine trial
