PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u'', u'session': u'001', u'group': u'A'}
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  expName = blockedTrials
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 1.0
      units = height
      startVal [time (s)] = 0.5
      image [set every repeat] = $filename
      size = (0.5,0.5)
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  Routine readyMessage
    TextComponent text
      text [set every repeat] = $readyMsg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"group{}.xlsx".format(expInfo['group'])
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
