PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'participant': u''}
  expName = flankerText
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent stimulus
      text [set every repeat] = $stim
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
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  Routine feedback
    CodeComponent checkCorrect
      Begin Routine:
        if resp.corr == 1:
            msg = "Correct! Well done!"
        else:
            msg = "Too bad! Wrong that time!"
    TextComponent feedBackText
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent thanksText
      text = You're done! Thanks for taking part!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press the left and right cursor keys according to the direction of the central arrow.

        Press any key now to get started
    KeyboardComponent instrEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'stim': u'< < < < <', u'corrAns': u'left', u'congr': 1},
      {u'stim': u'> > < > >', u'corrAns': u'left', u'congr': 0},
      {u'stim': u'< < > < <', u'corrAns': u'right', u'congr': 1},
      {u'stim': u'< < > < <', u'corrAns': u'right', u'congr': 0}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
