PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'participant': u''}
  expName = flankerImages
  Units = pix
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
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    ImageComponent target
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.5
      image = stims/handLeft.png
      size [set every repeat] = [targWidth, 40]
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    ImageComponent flanker1
      stopVal [duration (s)] = 1.0
      pos = [-180, 0]
      units = pix
      startVal [time (s)] = 0.5
      image = stims/handLeft.png
      size [set every repeat] = [flankWidth, 40]
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    ImageComponent flanker2
      stopVal [duration (s)] = 1.0
      pos = [-90, 0]
      startVal [time (s)] = 0.5
      image = stims/handLeft.png
      size [set every repeat] = [flankWidth, 40]
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    ImageComponent flanker3
      stopVal [duration (s)] = 1.0
      pos = [90, 0]
      startVal [time (s)] = 0.50
      image = stims/handLeft.png
      size [set every repeat] = [flankWidth, 40]
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    ImageComponent flanker4
      stopVal [duration (s)] = 1.0
      pos = [180, 0]
      startVal [time (s)] = 0.50
      image = stims/handLeft.png
      size [set every repeat] = [flankWidth, 40]
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  Routine thanks
    TextComponent thanksText
      text = You're done! Thanks for taking part!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Press the left and right cursor keys according to the direction of the central arrow.

        Press any key now to get started
    KeyboardComponent instrEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsImages.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'flankWidth': 80, u'targWidth': 80, u'congr': 1, u'corrAns': u'left'},
      {u'flankWidth': -80, u'targWidth': 80, u'congr': 0, u'corrAns': u'left'},
      {u'flankWidth': -80, u'targWidth': -80, u'congr': 1, u'corrAns': u'right'},
      {u'flankWidth': 80, u'targWidth': -80, u'congr': 0, u'corrAns': u'right'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
