PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual-search
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Routines
  Routine trial
    CodeComponent makeStim
      Code Type = Auto->JS
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      Begin Routine:
        myLetters = []

        for x in range(20):
            myLetter = visual.TextStim(win=win, name='myLetter',
                text='T',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=0.0,
                color=[random(), random(), random()], colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0)
            myLetters.append(myLetter)
    CodeComponent drawAll
      Code Type = Auto->JS
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      Begin Routine:
        for letter in myLetters:
            letter.setAutoDraw(True)
      End Routine:
        for letter in myLetters:
            letter.setAutoDraw(False)
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    TextComponent target
      color = black
      letterHeight = 0.1
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = L
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    MouseComponent mouse
      clickable = target,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
