PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = webcamStimulus
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text = My stimulus here
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        import cv2
        webcam = cv2.VideoCapture(0)
      Each Frame:
        ret, frame = webcam.read()

        frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)/255.0
    ImageComponent image
      flipVert = True
      stopVal [duration (s)] = 10
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      image [set every frame] = $frame
      size = (0.5, 0.5)
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Flow
  Routine trial
